OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.3.0)
Comment
  Sounds

Timeline Generator => #0
  Lua Script = C:/apps/diss/eeg_setup/experiment-timeline.lua
-> Sound Player "p"
  PLAY trigger = OVTK_StimulationId_Label_01
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/apps/diss/eeg_setup/sounds/p.wav
  Loop = false
#0 -> Sound Player "t"
  PLAY trigger = OVTK_StimulationId_Label_02
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/apps/diss/eeg_setup/sounds/t.wav
  Loop = false
#0 -> Sound Player "k"
  PLAY trigger = OVTK_StimulationId_Label_03
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/apps/diss/eeg_setup/sounds/k.wav
  Loop = false
#0 -> Sound Player "f"
  PLAY trigger = OVTK_StimulationId_Label_04
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/apps/diss/eeg_setup/sounds/f.wav
  Loop = false
#0 -> Sound Player "s"
  PLAY trigger = OVTK_StimulationId_Label_05
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/apps/diss/eeg_setup/sounds/s.wav
  Loop = false
#0 -> Sound Player "sh"
  PLAY trigger = OVTK_StimulationId_Label_06
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/apps/diss/eeg_setup/sounds/sh.wav
  Loop = false
#0 -> Sound Player "v"
  PLAY trigger = OVTK_StimulationId_Label_07
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/apps/diss/eeg_setup/sounds/v.wav
  Loop = false
#0 -> Sound Player "z"
  PLAY trigger = OVTK_StimulationId_Label_08
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/apps/diss/eeg_setup/sounds/z.wav
  Loop = false
#0 -> Sound Player "zh"
  PLAY trigger = OVTK_StimulationId_Label_09
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/apps/diss/eeg_setup/sounds/zh.wav
  Loop = false
#0 -> Sound Player "m"
  PLAY trigger = OVTK_StimulationId_Label_0A
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/apps/diss/eeg_setup/sounds/m.wav
  Loop = false
#0 -> Sound Player "n"
  PLAY trigger = OVTK_StimulationId_Label_0B
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/apps/diss/eeg_setup/sounds/n.wav
  Loop = false
#0 -> Sound Player "ng"
  PLAY trigger = OVTK_StimulationId_Label_0C
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/apps/diss/eeg_setup/sounds/ng.wav
  Loop = false
#0 -> Display cue image
  Display images in full screen = true
  Scale images to fit = true
  Clear screen Stimulation = OVTK_StimulationId_VisualStimulationStop
  Cue Image 1 = C:/apps/diss/eeg_setup/images/p.png
  Stimulation 1 = OVTK_StimulationId_Label_01
  Cue Image 2 = C:/apps/diss/eeg_setup/images/t.png
  Stimulation 2 = OVTK_StimulationId_Label_02
  Cue Image 3 = C:/apps/diss/eeg_setup/images/k.png
  Stimulation 3 = OVTK_StimulationId_Label_03
  Cue Image 4 = C:/apps/diss/eeg_setup/images/f.png
  Stimulation 4 = OVTK_StimulationId_Label_04
  Cue Image 5 = C:/apps/diss/eeg_setup/images/s.png
  Stimulation 5 = OVTK_StimulationId_Label_05
  Cue Image 6 = C:/apps/diss/eeg_setup/images/sh.png
  Stimulation 6 = OVTK_StimulationId_Label_06
  Cue Image 7 = C:/apps/diss/eeg_setup/images/v.png
  Stimulation 7 = OVTK_StimulationId_Label_07
  Cue Image 8 = C:/apps/diss/eeg_setup/images/z.png
  Stimulation 8 = OVTK_StimulationId_Label_08
  Cue Image 9 = C:/apps/diss/eeg_setup/images/zh.png
  Stimulation 9 = OVTK_StimulationId_Label_09
  Cue Image 10 = C:/apps/diss/eeg_setup/images/m.png
  Stimulation 10 = OVTK_StimulationId_Label_0A
  Cue Image 11 = C:/apps/diss/eeg_setup/images/n.png
  Stimulation 11 = OVTK_StimulationId_Label_0B
  Cue Image 12 = C:/apps/diss/eeg_setup/images/ng.png
  Stimulation 12 = OVTK_StimulationId_Label_0C
  Cue Image 13 = C:/apps/diss/eeg_setup/images/fleece.png
  Stimulation 13 = OVTK_StimulationId_Label_0D
  Cue Image 14 = C:/apps/diss/eeg_setup/images/goose.png
  Stimulation 14 = OVTK_StimulationId_Label_0E
  Cue Image 15 = C:/apps/diss/eeg_setup/images/trap.png
  Stimulation 15 = OVTK_StimulationId_Label_0F
  Cue Image 16 = C:/apps/diss/eeg_setup/images/thought.png
  Stimulation 16 = OVTK_StimulationId_Label_10
  Cue Image 17 = C:/apps/diss/eeg_setup/images/placeholder.png
  Stimulation 17 = OVTK_StimulationId_Label_11
  Cue Image 18 = C:/apps/diss/eeg_setup/images/placeholder.png
  Stimulation 18 = OVTK_StimulationId_Label_12
  Cue Image 19 = C:/apps/diss/eeg_setup/images/placeholder.png
  Stimulation 19 = OVTK_StimulationId_Label_13
  Cue Image 20 = C:/apps/diss/eeg_setup/images/placeholder.png
  Stimulation 20 = OVTK_StimulationId_Label_14
  Cue Image 21 = C:/apps/diss/eeg_setup/images/placeholder.png
  Stimulation 21 = OVTK_StimulationId_Label_15
  Cue Image 22 = C:/apps/diss/eeg_setup/images/placeholder.png
  Stimulation 22 = OVTK_StimulationId_Label_16
  Cue Image 23 = C:/apps/diss/eeg_setup/images/placeholder.png
  Stimulation 23 = OVTK_StimulationId_Label_17
  Cue Image 24 = C:/apps/diss/eeg_setup/images/placeholder.png
  Stimulation 24 = OVTK_StimulationId_Label_18
  Cue Image 25 = C:/apps/diss/eeg_setup/images/placeholder.png
  Stimulation 25 = OVTK_StimulationId_Label_19
  Cue Image 26 = C:/apps/diss/eeg_setup/images/placeholder.png
  Stimulation 26 = OVTK_StimulationId_Label_1A
  Cue Image 27 = C:/apps/diss/eeg_setup/images/placeholder.png
  Stimulation 27 = OVTK_StimulationId_Label_1B
  Cue Image 28 = C:/apps/diss/eeg_setup/images/placeholder.png
  Stimulation 28 = OVTK_StimulationId_Label_1C
  Cue Image 29 = C:/apps/diss/eeg_setup/images/placeholder.png
  Stimulation 29 = OVTK_StimulationId_Label_1D
  Cue Image 30 = C:/apps/diss/eeg_setup/images/placeholder.png
  Stimulation 30 = OVTK_StimulationId_Label_1E
  Cue Image 31 = C:/apps/diss/eeg_setup/images/placeholder.png
  Stimulation 31 = OVTK_StimulationId_Label_1F
  Cue Image 32 = C:/apps/diss/eeg_setup/images/speaking1.jpeg
  Stimulation 32 = OVTK_StimulationId_Number_00
  Cue Image 33 = C:/apps/diss/eeg_setup/images/speaking2.jpeg
  Stimulation 33 = OVTK_StimulationId_Number_01
  Cue Image 34 = C:/apps/diss/eeg_setup/images/speaking3.jpeg
  Stimulation 34 = OVTK_StimulationId_Number_02
  Cue Image 35 = C:/apps/diss/eeg_setup/images/speaking4.jpeg
  Stimulation 35 = OVTK_StimulationId_Number_03
  Cue Image 36 = C:/apps/diss/eeg_setup/images/speaking5.jpeg
  Stimulation 36 = OVTK_StimulationId_Number_04
  Cue Image 37 = C:/apps/diss/eeg_setup/images/prepare_articulators.png
  Stimulation 37 = OVTK_GDF_Tongue_Movement
  Cue Image 38 = C:/apps/diss/eeg_setup/images/placeholder.png
  Stimulation 38 = OVTK_StimulationId_Number_05
  Cue Image 39 = C:/apps/diss/eeg_setup/images/placeholder.png
  Stimulation 39 = OVTK_StimulationId_Number_06
  Cue Image 40 = C:/apps/diss/eeg_setup/images/rest.png
  Stimulation 40 = OVTK_StimulationId_RestStart
#0 -> Sound Player "fleece"
  PLAY trigger = OVTK_StimulationId_Label_0D
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/apps/diss/eeg_setup/sounds/fleece.wav
  Loop = false
#0 -> Sound Player "goose"
  PLAY trigger = OVTK_StimulationId_Label_0E
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/apps/diss/eeg_setup/sounds/goose.wav
  Loop = false
#0 -> Sound Player "trap"
  PLAY trigger = OVTK_StimulationId_Label_0F
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/apps/diss/eeg_setup/sounds/trap.wav
  Loop = false
#0 -> Sound Player "thought"
  PLAY trigger = OVTK_StimulationId_Label_10
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/apps/diss/eeg_setup/sounds/thought.wav
  Loop = false
Acquisition client => #18
  Acquisition server hostname = localhost
  Acquisition server port = 1024
#18.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Input signal=#18.Signal stream, Input stimulations=#0 -> Stimulation based epoching "stimuli" => #20
  Epoch duration (in sec) = 3
  Epoch offset (in sec) = 0
  Stimulation 1 = OVTK_StimulationId_Label_00
Input stream=#20 -> CSV File Writer
  Filename = C:/apps/diss/eeg_setup/openvibe_output/stimuli.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#18.Signal stream, Input stimulations=#0 -> Stimulation based epoching "preparation" => #22
  Epoch duration (in sec) = 1
  Epoch offset (in sec) = 0
  Stimulation 1 = OVTK_GDF_Tongue_Movement
Input stream=#22 -> CSV File Writer
  Filename = C:/apps/diss/eeg_setup/openvibe_output/articulators.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#18.Signal stream, Input stimulations=#0 -> Stimulation based epoching "thinking" => #24
  Epoch duration (in sec) = 3
  Epoch offset (in sec) = 0
  Stimulation 1 = OVTK_GDF_Feedback_Continuous
Input stream=#24 -> CSV File Writer
  Filename = C:/apps/diss/eeg_setup/openvibe_output/thinking.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#18.Signal stream, Input stimulations=#0 -> Stimulation based epoching "resting" => #26
  Epoch duration (in sec) = 3
  Epoch offset (in sec) = 0
  Stimulation 1 = OVTK_StimulationId_RestStart
Input stream=#26 -> CSV File Writer
  Filename = C:/apps/diss/eeg_setup/openvibe_output/resting.csv
  Precision = 10
  Append data = false
  Only last matrix = false

Sound Player "m"
  PLAY trigger = OVTK_StimulationId_Label_0A
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/apps/diss/eeg_setup/sounds/m.wav
  Loop = false

Sound Player "goose"
  PLAY trigger = OVTK_StimulationId_Label_0E
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/apps/diss/eeg_setup/sounds/goose.wav
  Loop = false
