OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.3.0)
Comment
  Python-modified lua script
Comment
  - Acquisition Server must of course be in acquiring state
  - drift correction in acquisition server should be DISABLED
  - remember to check impedances every time
  - do NOT move AS or Designer windows during recording
Comment
  2-second recording for 'prepare articulators'
  5-second recording for 4 other stages (above)

Timeline generator => #0
  Lua Script = C:/apps/diss/eeg_setup/experiment-timeline.lua
-> Sound Player "b"
  PLAY trigger = OVTK_StimulationId_Label_01
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/b.wav
  Loop = false
#0 -> Sound Player "ch"
  PLAY trigger = OVTK_StimulationId_Label_02
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/ch.wav
  Loop = false
#0 -> Sound Player "d"
  PLAY trigger = OVTK_StimulationId_Label_03
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/d.wav
  Loop = false
#0 -> Sound Player "dh"
  PLAY trigger = OVTK_StimulationId_Label_04
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/dh.wav
  Loop = false
#0 -> Sound Player "f"
  PLAY trigger = OVTK_StimulationId_Label_05
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/f.wav
  Loop = false
#0 -> Sound Player "g"
  PLAY trigger = OVTK_StimulationId_Label_06
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/g.wav
  Loop = false
#0 -> Display cue image
  Display images in full screen = true
  Scale images to fit = true
  Clear screen Stimulation = OVTK_StimulationId_VisualStimulationStop
  Cue Image 1 = C:/stims/imgs/b.png
  Stimulation 1 = OVTK_StimulationId_Label_01
  Cue Image 2 = C:/stims/imgs/ch.png
  Stimulation 2 = OVTK_StimulationId_Label_02
  Cue Image 3 = C:/stims/imgs/d.png
  Stimulation 3 = OVTK_StimulationId_Label_03
  Cue Image 4 = C:/stims/imgs/dh.png
  Stimulation 4 = OVTK_StimulationId_Label_04
  Cue Image 5 = C:/stims/imgs/f.png
  Stimulation 5 = OVTK_StimulationId_Label_05
  Cue Image 6 = C:/stims/imgs/g.png
  Stimulation 6 = OVTK_StimulationId_Label_06
  Cue Image 7 = C:/stims/imgs/h.png
  Stimulation 7 = OVTK_StimulationId_Label_07
  Cue Image 8 = C:/stims/imgs/j.png
  Stimulation 8 = OVTK_StimulationId_Label_08
  Cue Image 9 = C:/stims/imgs/jh.png
  Stimulation 9 = OVTK_StimulationId_Label_09
  Cue Image 10 = C:/stims/imgs/k.png
  Stimulation 10 = OVTK_StimulationId_Label_0A
  Cue Image 11 = C:/stims/imgs/l.png
  Stimulation 11 = OVTK_StimulationId_Label_19
  Cue Image 12 = C:/stims/imgs/m.png
  Stimulation 12 = OVTK_StimulationId_Label_0C
  Cue Image 13 = C:/stims/imgs/n.png
  Stimulation 13 = OVTK_StimulationId_Label_0D
  Cue Image 14 = C:/stims/imgs/ng.png
  Stimulation 14 = OVTK_StimulationId_Label_0E
  Cue Image 15 = C:/stims/imgs/p.png
  Stimulation 15 = OVTK_StimulationId_Label_0F
  Cue Image 16 = C:/stims/imgs/r.png
  Stimulation 16 = OVTK_StimulationId_Label_10
  Cue Image 17 = C:/stims/imgs/s.png
  Stimulation 17 = OVTK_StimulationId_Label_11
  Cue Image 18 = C:/stims/imgs/sh.png
  Stimulation 18 = OVTK_StimulationId_Label_12
  Cue Image 19 = C:/stims/imgs/t.png
  Stimulation 19 = OVTK_StimulationId_Label_13
  Cue Image 20 = C:/stims/imgs/th.png
  Stimulation 20 = OVTK_StimulationId_Label_14
  Cue Image 21 = C:/stims/imgs/v.png
  Stimulation 21 = OVTK_StimulationId_Label_15
  Cue Image 22 = C:/stims/imgs/w.png
  Stimulation 22 = OVTK_StimulationId_Label_16
  Cue Image 23 = C:/stims/imgs/x.png
  Stimulation 23 = OVTK_StimulationId_Label_17
  Cue Image 24 = C:/stims/imgs/z.png
  Stimulation 24 = OVTK_StimulationId_Label_18
  Cue Image 25 = C:/stims/imgs/zh.png
  Stimulation 25 = OVTK_StimulationId_Label_19
  Cue Image 26 = C:/stims/imgs/bath.png
  Stimulation 26 = OVTK_StimulationId_Label_1A
  Cue Image 27 = C:/stims/imgs/comma.png
  Stimulation 27 = OVTK_StimulationId_Label_1B
  Cue Image 28 = C:/stims/imgs/dress.png
  Stimulation 28 = OVTK_StimulationId_Label_1C
  Cue Image 29 = C:/stims/imgs/fleece.png
  Stimulation 29 = OVTK_StimulationId_Label_1D
  Cue Image 30 = C:/stims/imgs/foot.png
  Stimulation 30 = OVTK_StimulationId_Label_1E
  Cue Image 31 = C:/stims/imgs/goose.png
  Stimulation 31 = OVTK_StimulationId_Label_1F
  Cue Image 32 = C:/stims/imgs/kit.png
  Stimulation 32 = OVTK_StimulationId_Number_00
  Cue Image 33 = C:/stims/imgs/lot.png
  Stimulation 33 = OVTK_StimulationId_Number_01
  Cue Image 34 = C:/stims/imgs/strut.png
  Stimulation 34 = OVTK_StimulationId_Number_02
  Cue Image 35 = C:/stims/imgs/thought.png
  Stimulation 35 = OVTK_StimulationId_Number_03
  Cue Image 36 = C:/stims/imgs/trap.png
  Stimulation 36 = OVTK_StimulationId_Number_04
  Cue Image 37 = C:/stims/imgs/prepare_articulators.png
  Stimulation 37 = OVTK_GDF_Tongue_Movement
  Cue Image 38 = C:/stims/imgs/think_of_speaking.png
  Stimulation 38 = OVTK_GDF_Feedback_Continuous
  Cue Image 39 = C:/stims/imgs/speaking.png
  Stimulation 39 = OVTK_GDF_Tongue
  Cue Image 40 = C:/stims/imgs/rest.png
  Stimulation 40 = OVTK_StimulationId_RestStart
#0 -> Sound Player "h"
  PLAY trigger = OVTK_StimulationId_Label_07
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/h.wav
  Loop = false
#0 -> Sound Player "j"
  PLAY trigger = OVTK_StimulationId_Label_08
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/j.wav
  Loop = false
#0 -> Sound Player "jh"
  PLAY trigger = OVTK_StimulationId_Label_09
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/jh.wav
  Loop = false
#0 -> Sound Player "k"
  PLAY trigger = OVTK_StimulationId_Label_0A
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/k.wav
  Loop = false
#0 -> Sound Player "l"
  PLAY trigger = OVTK_StimulationId_Label_0B
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/l.wav
  Loop = false
#0 -> Sound Player "m"
  PLAY trigger = OVTK_StimulationId_Label_0C
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/m.wav
  Loop = false
#0 -> Sound Player "n"
  PLAY trigger = OVTK_StimulationId_Label_0D
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/n.wav
  Loop = false
#0 -> Sound Player "ng"
  PLAY trigger = OVTK_StimulationId_Label_0E
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/ng.wav
  Loop = false
#0 -> Sound Player "p"
  PLAY trigger = OVTK_StimulationId_Label_0F
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/p.wav
  Loop = false
#0 -> Sound Player "r"
  PLAY trigger = OVTK_StimulationId_Label_10
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/r.wav
  Loop = false
#0 -> Sound Player "s"
  PLAY trigger = OVTK_StimulationId_Label_11
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/s.wav
  Loop = false
#0 -> Sound Player "sh"
  PLAY trigger = OVTK_StimulationId_Label_12
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/sh.wav
  Loop = false
#0 -> Sound Player "t"
  PLAY trigger = OVTK_StimulationId_Label_13
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/t.wav
  Loop = false
#0 -> Sound Player "th"
  PLAY trigger = OVTK_StimulationId_Label_14
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/th.wav
  Loop = false
#0 -> Sound Player "v"
  PLAY trigger = OVTK_StimulationId_Label_15
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/v.wav
  Loop = false
#0 -> Sound Player "w"
  PLAY trigger = OVTK_StimulationId_Label_16
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/w.wav
  Loop = false
#0 -> Sound Player "x"
  PLAY trigger = OVTK_StimulationId_Label_17
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/x.wav
  Loop = false
#0 -> Sound Player "z"
  PLAY trigger = OVTK_StimulationId_Label_18
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/z.wav
  Loop = false
#0 -> Sound Player "zh"
  PLAY trigger = OVTK_StimulationId_Label_19
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/zh.wav
  Loop = false
#0 -> Sound Player "bath"
  PLAY trigger = OVTK_StimulationId_Label_1A
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/bath.wav
  Loop = false
#0 -> Sound Player "comma"
  PLAY trigger = OVTK_StimulationId_Label_1B
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/comma.wav
  Loop = false
#0 -> Sound Player "dress"
  PLAY trigger = OVTK_StimulationId_Label_1C
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/dress.wav
  Loop = false
#0 -> Sound Player "fleece"
  PLAY trigger = OVTK_StimulationId_Label_1D
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/fleece.wav
  Loop = false
#0 -> Sound Player "foot"
  PLAY trigger = OVTK_StimulationId_Label_1E
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/foot.wav
  Loop = false
#0 -> Sound Player "goose"
  PLAY trigger = OVTK_StimulationId_Label_1F
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/goose.wav
  Loop = false
#0 -> Sound Player "kit"
  PLAY trigger = OVTK_StimulationId_Number_00
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/kit.wav
  Loop = false
#0 -> Sound Player "lot"
  PLAY trigger = OVTK_StimulationId_Number_01
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/lot.wav
  Loop = false
#0 -> Sound Player "strut"
  PLAY trigger = OVTK_StimulationId_Number_02
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/strut.wav
  Loop = false
#0 -> Sound Player "thought"
  PLAY trigger = OVTK_StimulationId_Number_03
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/thought.wav
  Loop = false
#0 -> Sound Player "trap"
  PLAY trigger = OVTK_StimulationId_Number_04
  STOP trigger = OVTK_StimulationId_Label_00
  File to play = C:/stims/wavs/trap.wav
  Loop = false
Acquisition client => #38
  Acquisition server hostname = localhost
  Acquisition server port = 1024
#38.Stimulations -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Input signal=#38.Signal stream, Input stimulations=#0 -> Stimulation based epoching "phoneme stimuli" => #40
  Epoch duration (in sec) = 5
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Label_00
Input stream=#40 -> CSV File Writer
  Filename = C:/stims/experiments/stimuli.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#38.Signal stream, Input stimulations=#0 -> Stimulation based epoching "think of speaking" => #42
  Epoch duration (in sec) = 5
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_Feedback_Continuous
Input stream=#42 -> CSV File Writer
  Filename = C:/stims/experiments/thinking.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#38.Signal stream, Input stimulations=#0 -> Stimulation based epoching "speaking" => #44
  Epoch duration (in sec) = 5
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_Tongue
Input stream=#44 -> CSV File Writer
  Filename = C:/stims/experiments/speaking.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#38.Signal stream, Input stimulations=#0 -> Stimulation based epoching "rest" => #46
  Epoch duration (in sec) = 5
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_RestStart
Input stream=#46 -> CSV File Writer
  Filename = C:/stims/experiments/resting.csv
  Precision = 10
  Append data = false
  Only last matrix = false
Input signal=#38.Signal stream, Input stimulations=#0 -> Stimulation based epoching "prepare articulators" => #48
  Epoch duration (in sec) = 2
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_GDF_Tongue_Movement
Input stream=#48 -> CSV File Writer
  Filename = C:/stims/experiments/articulators.csv
  Precision = 10
  Append data = false
  Only last matrix = false
